CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:38
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "LUT")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<plate>[0-9][0-9][0-9][0-9])_(?P<Well>[A-Z][0-9][0-9])_(?P<Site>s[0-9])_w[0-9]
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Run>.*)$
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "W")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Ser>.*)_(?P<stain>)_(?P<ch>)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:RedFUCCI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:GreenFUCCI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:mt
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w4")
    Name to assign these images:Ab
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Ser

Resize:[module_num:5|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
    Select the input image:GreenFUCCI
    Name the output image:ResizedGreenFUCCI
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Bicubic
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    Additional image count:3
    Select the additional image?:RedFUCCI
    Name the output image:ResizedRedFUCCI
    Select the additional image?:mt
    Name the output image:Resizedmt
    Select the additional image?:Ab
    Name the output image:ResizedAb

Morph:[module_num:6|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
    Select the input image:Resizedmt
    Name the output image:MorphMT
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Scale:10
    Structuring element:Disk
    X offset:1
    Y offset:1
    Angle:0
    Width:3
    Height:3
    Custom:3,3,111111111
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:ResizedGreenFUCCI
    Name the output image:IllumResizedGreenFUCCI
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:ResizedGreenFUCCI
    Name the output image:CorrResizedGreenFUCCI
    Select the illumination function:IllumResizedGreenFUCCI
    Select how the illumination function is applied:Subtract

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:ResizedRedFUCCI
    Name the output image:IllumResizedRedFUCCI
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:ResizedRedFUCCI
    Name the output image:CorrResizedRedFUCCI
    Select the illumination function:IllumResizedRedFUCCI
    Select how the illumination function is applied:Subtract

ImageMath:[module_num:11|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:ResizedDapi
    Image or measurement?:Image
    Select the first image:CorrResizedGreenFUCCI
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CorrResizedRedFUCCI
    Multiply the second image by:1.0
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
Morph:[module_num:12|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
    Select the input image:ResizedDapi
    Name the output image:ResizedDapi
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
ImageMath:[module_num:13|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ResizedDapi2
    Image or measurement?:Image
    Select the first image:ResizedDapi
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceEdges:[module_num:14|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enabled:False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
    Select the input image:ResizedDapi2
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
MakeProjection:[module_num:15|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enabled:False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
    Select the input image:RedFUCCI
    Type of projection:Maximum
    Name the output image:Projection
    Frequency:6.0

IdentifyPrimaryObjects:[module_num:16|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enabled:False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
    Select the input image:ResizedDapi
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7,30
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.045
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:ResizedDapi2
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,110
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:RidlerCalvard
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:18|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:MorphMT
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.02
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
IdentifyTertiaryObjects:[module_num:19|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:20|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
    Select the input objects:Cytoplasm
    Name the output image:cytooutline
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:Nuclei
    Name the output image:nucleioutline
    Select the color format:Color
    Select the colormap:Default

DisplayDataOnImage:[module_num:22|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:nucleioutline
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

DisplayDataOnImage:[module_num:23|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

DisplayDataOnImage:[module_num:24|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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:cytooutline
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

MeasureObjectIntensity:[module_num:25|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
    Hidden:4
    Select an image to measure:CorrResizedGreenFUCCI
    Select an image to measure:CorrResizedRedFUCCI
    Select an image to measure:ResizedAb
    Select an image to measure:Resizedmt
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:26|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

DisplayScatterPlot:[module_num:27|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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Nuclei
    Select the measurement to plot on the X-axis:Intensity_MeanIntensity_CorrResizedGreenFUCCI
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Nuclei
    Select the measurement to plot on the Y-axis:Intensity_MeanIntensity_CorrResizedRedFUCCI
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:x=green, y=red

FilterObjects:[module_num:28|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
    Name the output objects:FilteredG1
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_CorrResizedRedFUCCI
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_CorrResizedGreenFUCCI
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.04

FilterObjects:[module_num:29|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
    Name the output objects:FilteredG1S
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_CorrResizedRedFUCCI
    Filter using a minimum measurement value?:Yes
    Minimum value:0.04
    Filter using a maximum measurement value?:Yes
    Maximum value:0.4
    Select the measurement to filter by:Intensity_MeanIntensity_CorrResizedGreenFUCCI
    Filter using a minimum measurement value?:Yes
    Minimum value:0.04
    Filter using a maximum measurement value?:Yes
    Maximum value:0.4

FilterObjects:[module_num:30|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
    Name the output objects:FilteredSG2
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_CorrResizedGreenFUCCI
    Filter using a minimum measurement value?:Yes
    Minimum value:0.041
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_CorrResizedRedFUCCI
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.04

MeasureObjectIntensity:[module_num:31|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
    Hidden:3
    Select an image to measure:CorrResizedGreenFUCCI
    Select an image to measure:CorrResizedRedFUCCI
    Select an image to measure:ResizedAb
    Select objects to measure:FilteredG1
    Select objects to measure:FilteredG1S
    Select objects to measure:FilteredSG2

GrayToColor:[module_num:32|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
    Select a color scheme:RGB
    Select the image to be colored red:CorrResizedRedFUCCI
    Select the image to be colored green:CorrResizedGreenFUCCI
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    Name the output image:RedGreenFUCCI
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:33|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RedGreenFUCCI
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#FF241D
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredG1
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    Select outline color:#FFE019
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredG1S
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    Select outline color:#32FF38
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredSG2

DisplayDataOnImage:[module_num:34|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GreenFUCCI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:FilteredlCell
    Saved file format:png
    Output file location:Default Output Folder sub-folder|FilteredlCell
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:nucleioutline
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GreenFUCCI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:nucleioutline
    Saved file format:png
    Output file location:Default Output Folder sub-folder|nucleioutline
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:cytooutline
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GreenFUCCI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cytooutline
    Saved file format:png
    Output file location:Default Output Folder sub-folder|cytooutline
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:38|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|measurement
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:FilteredG1|Intensity_MinIntensity_ResizedAb,FilteredG1|Intensity_MinIntensity_CorrResizedRedFUCCI,FilteredG1|Intensity_MinIntensity_CorrResizedGreenFUCCI,FilteredG1|Intensity_IntegratedIntensityEdge_ResizedAb,FilteredG1|Intensity_IntegratedIntensityEdge_CorrResizedRedFUCCI,FilteredG1|Intensity_IntegratedIntensityEdge_CorrResizedGreenFUCCI,FilteredG1|Intensity_StdIntensity_ResizedAb,FilteredG1|Intensity_StdIntensity_CorrResizedRedFUCCI,FilteredG1|Intensity_StdIntensity_CorrResizedGreenFUCCI,FilteredG1|Intensity_MassDisplacement_ResizedAb,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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